---
API: 3
OpenSesame: 4.0.24
Platform: nt
---
set width 1024
set title "MSIT v.1.0.0"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 1
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\hambe824\\OneDrive - Uppsala universitet\\ECAN Lab\\Measures\\Experiments\\MSIT\\python"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define inline_script control
	set description "Executes Python code"
	___run__
	state = 'controll'
	
	ttl.send_signal(controll_channel)
	time_image_shown = clock.time() - time_task_start
	canvases[image].show()
	
	# trial_time variable comes from control_loop
	last_response, last_response_time, response_sequence = get_input(trial_time)
	
	if use_keyboard:
	    is_response_correct = last_response == correct_response_keyboard
	else:
	    is_response_correct = last_response == correct_response
	
	print(f"Correct response:{correct_response}, user response:{last_response}")
	    
	ttl.send_signal(close_all)
	__end__
	set _prepare ""

define loop control_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "c1.bmp"
	setcycle 0 trial_time 1750
	setcycle 0 correct_response a
	setcycle 0 correct_response_keyboard left
	setcycle 1 image "c3.bmp"
	setcycle 1 trial_time 1750
	setcycle 1 correct_response c
	setcycle 1 correct_response_keyboard right
	setcycle 2 image "c2.bmp"
	setcycle 2 trial_time 1750
	setcycle 2 correct_response d
	setcycle 2 correct_response_keyboard down
	setcycle 3 image "c3.bmp"
	setcycle 3 trial_time 1750
	setcycle 3 correct_response c
	setcycle 3 correct_response_keyboard right
	setcycle 4 image "c1.bmp"
	setcycle 4 trial_time 1750
	setcycle 4 correct_response a
	setcycle 4 correct_response_keyboard left
	setcycle 5 image "c3.bmp"
	setcycle 5 trial_time 1750
	setcycle 5 correct_response c
	setcycle 5 correct_response_keyboard right
	setcycle 6 image "c1.bmp"
	setcycle 6 trial_time 1750
	setcycle 6 correct_response a
	setcycle 6 correct_response_keyboard left
	setcycle 7 image "c2.bmp"
	setcycle 7 trial_time 1750
	setcycle 7 correct_response d
	setcycle 7 correct_response_keyboard down
	setcycle 8 image "c3.bmp"
	setcycle 8 trial_time 1750
	setcycle 8 correct_response c
	setcycle 8 correct_response_keyboard right
	setcycle 9 image "c1.bmp"
	setcycle 9 trial_time 1750
	setcycle 9 correct_response a
	setcycle 9 correct_response_keyboard left
	setcycle 10 image "c2.bmp"
	setcycle 10 trial_time 1750
	setcycle 10 correct_response d
	setcycle 10 correct_response_keyboard down
	setcycle 11 image "c1.bmp"
	setcycle 11 trial_time 1750
	setcycle 11 correct_response a
	setcycle 11 correct_response_keyboard left
	setcycle 12 image "c2.bmp"
	setcycle 12 trial_time 1750
	setcycle 12 correct_response d
	setcycle 12 correct_response_keyboard down
	setcycle 13 image "c1.bmp"
	setcycle 13 trial_time 1750
	setcycle 13 correct_response a
	setcycle 13 correct_response_keyboard left
	setcycle 14 image "c3.bmp"
	setcycle 14 trial_time 1750
	setcycle 14 correct_response c
	setcycle 14 correct_response_keyboard right
	setcycle 15 image "c1.bmp"
	setcycle 15 trial_time 1750
	setcycle 15 correct_response a
	setcycle 15 correct_response_keyboard left
	setcycle 16 image "c2.bmp"
	setcycle 16 trial_time 1750
	setcycle 16 correct_response d
	setcycle 16 correct_response_keyboard down
	setcycle 17 image "c3.bmp"
	setcycle 17 trial_time 1750
	setcycle 17 correct_response c
	setcycle 17 correct_response_keyboard right
	setcycle 18 image "c2.bmp"
	setcycle 18 trial_time 1750
	setcycle 18 correct_response d
	setcycle 18 correct_response_keyboard down
	setcycle 19 image "c1.bmp"
	setcycle 19 trial_time 1750
	setcycle 19 correct_response a
	setcycle 19 correct_response_keyboard left
	setcycle 20 image "c3.bmp"
	setcycle 20 trial_time 1750
	setcycle 20 correct_response c
	setcycle 20 correct_response_keyboard right
	setcycle 21 image "c2.bmp"
	setcycle 21 trial_time 1750
	setcycle 21 correct_response d
	setcycle 21 correct_response_keyboard down
	setcycle 22 image "c3.bmp"
	setcycle 22 trial_time 1750
	setcycle 22 correct_response c
	setcycle 22 correct_response_keyboard right
	setcycle 23 image "c2.bmp"
	setcycle 23 trial_time 1750
	setcycle 23 correct_response d
	setcycle 23 correct_response_keyboard down
	run controll_sequence

define sequence controll_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run control True
	run logger True

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run import True
	run ttl_module True
	run sync_box True
	run settings True
	run variables True
	run functions True
	run task_init True
	run wait_on_scaner True
	run loop True

define inline_script functions
	set description "Executes Python code"
	set _run ""
	___prepare__
	def get_input(time):
	    start_time = clock.time()
	    response_sequence = []
	    while True:
	        if clock.time() - start_time > time:
	            break
	        if use_keyboard:
	            key, _ = keyboard.get_key(timeout=10)
	            response = [key] if key is not None else []
	        else:
	            response = syncbox.readCurrentInputBuffer()
	        end_time = clock.time()
	        for char in response:
	            if char in (one,two,three):
	                response_time = end_time - start_time
	                response_sequence.append((char, response_time))
	
	    try:
	        last_response = response_sequence[-1][0]
	        last_response_time = response_sequence[-1][1]
	
	    except IndexError:
	        last_response = None
	        last_response_time = None
	    
	    return last_response, last_response_time, response_sequence
	__end__

define inline_script import
	set description "Executes Python code"
	set _run ""
	___prepare__
	import sys
	import time
	import serial.tools.list_ports
	from serial import Serial, SerialException
	__end__

define inline_script interference
	set description "Executes Python code"
	___run__
	state = 'interference'
	
	ttl.send_signal(interference_channel)
	time_image_shown = clock.time() - time_task_start
	start_time = clock.time()
	canvases[image].show()
	
	# trial_time variable comes from interference_loop
	last_response, last_response_time, response_sequence = get_input(trial_time)
	
	if use_keyboard:
	    is_response_correct = last_response == correct_response_keyboard
	else:
	    is_response_correct = last_response == correct_response
	    
	print(f"Correct response:{correct_response}, user response:{last_response}")
	
	ttl.send_signal(close_all)
	
	if var.count_interference_sequence == 95 and var.count_controll_loop == 3:
	    
	    fixdot.show()
	    clock.sleep(time_task_fixdot)
	    time_task_end = clock.time() - time_task_start
	    ttl.pulse_channel(task_channel, signal_length)
	    print("---Exepriment Ended---")
	    
	    end_screen.show()
	    clock.sleep(time_text)
	    buffer = syncbox.readCurrentInputBuffer()
	    syncbox.stop()
	    syncbox.close()
	    
	__end__
	set _prepare ""

define loop interference_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 image "i112.bmp"
	setcycle 0 trial_time 1750
	setcycle 0 correct_response d
	setcycle 0 correct_response_keyboard down
	setcycle 1 image "i212.bmp"
	setcycle 1 trial_time 1750
	setcycle 1 correct_response a
	setcycle 1 correct_response_keyboard left
	setcycle 2 image "i313.bmp"
	setcycle 2 trial_time 1750
	setcycle 2 correct_response a
	setcycle 2 correct_response_keyboard left
	setcycle 3 image "i211.bmp"
	setcycle 3 trial_time 1750
	setcycle 3 correct_response d
	setcycle 3 correct_response_keyboard down
	setcycle 4 image "i212.bmp"
	setcycle 4 trial_time 1750
	setcycle 4 correct_response a
	setcycle 4 correct_response_keyboard left
	setcycle 5 image "i221.bmp"
	setcycle 5 trial_time 1750
	setcycle 5 correct_response a
	setcycle 5 correct_response_keyboard left
	setcycle 6 image "i211.bmp"
	setcycle 6 trial_time 1750
	setcycle 6 correct_response d
	setcycle 6 correct_response_keyboard down
	setcycle 7 image "i112.bmp"
	setcycle 7 trial_time 1750
	setcycle 7 correct_response d
	setcycle 7 correct_response_keyboard down
	setcycle 8 image "i131.bmp"
	setcycle 8 trial_time 1750
	setcycle 8 correct_response c
	setcycle 8 correct_response_keyboard right
	setcycle 9 image "i322.bmp"
	setcycle 9 trial_time 1750
	setcycle 9 correct_response c
	setcycle 9 correct_response_keyboard right
	setcycle 10 image "i131.bmp"
	setcycle 10 trial_time 1750
	setcycle 10 correct_response c
	setcycle 10 correct_response_keyboard right
	setcycle 11 image "i221.bmp"
	setcycle 11 trial_time 1750
	setcycle 11 correct_response a
	setcycle 11 correct_response_keyboard left
	setcycle 12 image "i322.bmp"
	setcycle 12 trial_time 1750
	setcycle 12 correct_response c
	setcycle 12 correct_response_keyboard right
	setcycle 13 image "i232.bmp"
	setcycle 13 trial_time 1750
	setcycle 13 correct_response c
	setcycle 13 correct_response_keyboard right
	setcycle 14 image "i311.bmp"
	setcycle 14 trial_time 1750
	setcycle 14 correct_response c
	setcycle 14 correct_response_keyboard right
	setcycle 15 image "i313.bmp"
	setcycle 15 trial_time 1750
	setcycle 15 correct_response a
	setcycle 15 correct_response_keyboard left
	setcycle 16 image "i332.bmp"
	setcycle 16 trial_time 1750
	setcycle 16 correct_response d
	setcycle 16 correct_response_keyboard down
	setcycle 17 image "i331.bmp"
	setcycle 17 trial_time 1750
	setcycle 17 correct_response a
	setcycle 17 correct_response_keyboard left
	setcycle 18 image "i311.bmp"
	setcycle 18 trial_time 1750
	setcycle 18 correct_response c
	setcycle 18 correct_response_keyboard right
	setcycle 19 image "i331.bmp"
	setcycle 19 trial_time 1750
	setcycle 19 correct_response a
	setcycle 19 correct_response_keyboard left
	setcycle 20 image "i233.bmp"
	setcycle 20 trial_time 1750
	setcycle 20 correct_response d
	setcycle 20 correct_response_keyboard down
	setcycle 21 image "i332.bmp"
	setcycle 21 trial_time 1750
	setcycle 21 correct_response d
	setcycle 21 correct_response_keyboard down
	setcycle 22 image "i233.bmp"
	setcycle 22 trial_time 1750
	setcycle 22 correct_response d
	setcycle 22 correct_response_keyboard down
	setcycle 23 image "i232.bmp"
	setcycle 23 trial_time 1750
	setcycle 23 correct_response c
	setcycle 23 correct_response_keyboard right
	run interference_sequence

define sequence interference_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run interference True
	run logger True

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	log response_sequence

define loop loop
	set source table
	set repeat 4
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run loop_sequence

define sequence loop_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run control_loop True
	run interference_loop True

define inline_script settings
	set description "Executes Python code"
	set _run ""
	___prepare__
	ttl          = TTLController(enabled=True)
	syncbox      = SyncBox(enabled=True, num_volumes=8000, simulation=False)
	keyboard     = Keyboard(keylist=['left','up','right'])
	
	control     = True
	interference = True
	use_keyboard = False
	
	# Input
	if use_keyboard:
	    one   = 'left'
	    two   = 'up'
	    three = 'right'
	else:
	    one   = 'a'
	    two   = 'd'
	    three = 'c'
	
	# Time settings
	time_task_fixdot = 15000
	time_fixdot      = 3000
	time_text        = 1750
	
	# TTL setting
	close_all            = b'00'
	task_channel         = b'01'
	controll_channel     = b'02'
	interference_channel = b'04'
	signal_length        = 10
	__end__

define inline_script sync_box
	set description "Executes Python code"
	set _run ""
	___prepare__
	class SyncBox:
	    def __init__(self, enabled = True, num_volumes=16, num_slices=1, trigger_slice=1, trigger_volume=1, pulse_length=100, 
	    TR_time=3000, optional_trigger_slice=0, optional_trigger_volume=0, simulation = True):
	        """
	        This class finds and establishes serial connection with the SyncBox in serial mode.
	
	        Parameters
	        -------
	        num_volumes
	            Number of volumes
	        num_slices
	            Number of slices in each volume
	        trigger_slice
	            Slice number to trigger on
	        trigger_volume
	            How often to trigger on a volume. 
	        pulse_length
	            Pulse length in ms. Only needed in simulation mode.
	        TR_time
	            TR time in ms. Only needed in simulation mode.
	        optional_trigger_slice
	            0 for triggering on the slice typed above. 1 for triggering on each slice. 2 for triggering on random slice. (1 and 2 override above settings)
	        optional_trigger_volume
	            0 for triggering on each volume typed above. 1 for triggering on each volume. 2 for triggering on random volume. (1 and 2 override above settings)
	        simulation
	            False for synchronization mode. True for simulation mode.
	        """
	        self.enabled = enabled
	        self.num_volumes = num_volumes
	        self.num_slices = num_slices
	        self.trigger_slice = trigger_slice
	        self.trigger_volume = trigger_volume
	        self.pulse_length = pulse_length
	        self.TR_time = TR_time
	        self.optional_trigger_slice = optional_trigger_slice
	        self.optional_trigger_volume = optional_trigger_volume
	        self.simulation = simulation
	        
	        if self.enabled:
	            self.port = self._findSyncBox()
	            self._configure()
	    
	
	    def readCurrentInputBuffer(self) -> str:
	        """
	        This function will read the current input buffer from the SyncBox 
	        even if it is empty. Useful for use within loops.
	        
	        Return
	        ------
	        trigger : str
	            "s" for synchronization
	            "a" for left thumb on ResponseGrips
	            "b" for left index on ResponseGrips
	            "c" for right index on ResponseGrips
	            "d" for right thumb on ResponseGrips
	        
	        """
	        if not self.enabled:
	            return False
	        
	        out = self.port.read(self.port.in_waiting)
	        return out.decode("utf-8")
	        
	
	
	    def getTrigger(self, timeout = 0) -> str:
	        """
	        This function returns the trigger sent from the SyncBox to the computer.
	        
	        Parameters
	        ----------
	        timeout : float
	            Number of seconds to wait for the trigger to be returned from SyncBox
	            if set to None, it will wait an unlimited number of seconds for input.
	
	        Return
	        ------
	        trigger : str
	            "s" for synchronization
	            "a" for left thumb on ResponseGrips
	            "b" for left index on ResponseGrips
	            "c" for right index on ResponseGrips
	            "d" for right thumb on ResponseGrips
	        
	        """
	        if not self.enabled:
	            return False
	        
	        self.port.timeout = timeout
	        out = self.port.read(1)
	        self.port.timeout = None
	        return out.decode("utf-8")
	    
	    def start(self) -> None:
	        """
	        This function starts a SyncBox synchronization or simulation session
	
	        Raises
	        ----------
	        SyncBoxException
	            if unable to start session
	
	        """
	        if not self.enabled:
	            return False
	        
	        self.port.write(b"S")
	        time.sleep(0.1)
	        confirmation = self.port.read(1)
	        time.sleep(0.1)
	        if confirmation != b"S":
	            raise SyncBoxException(f"Unable to start session {confirmation}")
	
	    def stop(self) -> None:
	        """
	        This function stops an ongoing SyncBox synchronization or simulation session
	
	        Raises
	        ----------
	        SyncBoxException
	            if unable to stop session
	
	        """
	        if not self.enabled:
	            return False        
	        
	        self.port.write(b"A")
	        time.sleep(0.1)
	        confirmation = self.port.read(1)
	        time.sleep(0.1)
	        if confirmation != b"A":
	            raise SyncBoxException("Unable to stop session")
	
	
	    def _findSyncBox(self) -> Serial:
	        """
	        This function loops thorugh all available serialports and finds the SyncBox
	        
	        Return
	        -------
	        serialport : Serial
	            the serial port connected to the SyncBox
	
	        Raises
	        ----------
	        SyncBoxException
	            if unable to find the SyncBox
	        
	        """
	        availablePorts = self._getAvailableSerialPorts()
	        for port in availablePorts:
	            try:
	                com = Serial(port=port, baudrate=57600)
	                com.timeout = 0.2
	                com.write(b"C")   #Trying to enter computer mode
	                time.sleep(0.1)
	                confirmation = com.read(1)
	                time.sleep(0.1)
	                if confirmation == b"C":
	                    return com
	                    breakt
	
	            except SerialException:
	                continue
	     
	
	        raise SyncBoxException("Unable to find SyncBox")
	
	
	    def _configure(self) -> None:
	        """
	        This function configures the SyncBox to the parameters provided to the constructor
	
	        Raises
	        ----------
	        SyncBoxException
	            if incorrect confirmation is recieved from SyncBox
	
	        """
	        self.port.write(b"R")   #Entering SyncBox configuration mode
	        time.sleep(0.1)
	        confirmation = self.port.read(1)
	        time.sleep(0.1)
	        if confirmation != b"R":
	            raise SyncBoxException("Unable to configure SyncBox. Please restart the SyncBox")
	        self.port.write(b"0000") #Dummy "0000"
	        self.port.write(self._stringVar(self.num_volumes)) #Number of volumes "xxxx"
	        self.port.write(self._stringVar(self.num_slices)) #Number of slices in each volume "xxxx"
	        self.port.write(self._stringVar(self.pulse_length)) #Pulse length in ms (Only needed in simulation mode) "xxxx"
	        self.port.write(self._stringVar(self.TR_time)) #TR time in ms (Only needed in simulation mode) "xxxx"
	        self.port.write(self._stringVar(self.trigger_slice)) #Slice number you like to trigger on "xxxx"
	        self.port.write(self._stringVar(self.trigger_volume)) #Enter how often you will trigger on volume "xxxx"
	        self.port.write(b"0000") #Dummy "0000"
	        self.port.write(b"0000") #Dummy "0000"
	        self.port.write(self._stringVar(self.optional_trigger_slice)) #0 for triggering on each slice typed above, 1 for triggering on each slice, 2 for triggering on random slice "000x"
	        self.port.write(self._stringVar(self.optional_trigger_volume)) #0 for triggering on each volume typed above, 1 for triggering on each volume, 2 for triggering on random volume "000x"
	        if self.simulation:
	            self.port.write(b"0000") #0001 for synchronization 0000 for simualtion
	        else:
	            self.port.write(b"0001")
	        time.sleep(0.2)
	        confirmation = self.port.read(12*4)
	        time.sleep(0.1)
	        if len(confirmation) != 12*4:
	            raise SyncBoxException("Unable to configure SyncBox. Please restart the SyncBox")
	        
	
	    def _stringVar(self, var) -> bytes:
	        """
	        This function makes sure the provided parameters are maximum 4 digits 
	        and converts it to bytes in the correct format
	
	        Return
	        --------
	        bytes : bytes
	            bytes of correct string input for the SyncBox
	
	        Raises
	        ----------
	        SyncBoxException
	            if a provided parameter is of incorrect length
	
	        """
	        num = str(var)
	        if len(num) == 1:
	            zero = "000"
	        elif len(num) == 2:
	            zero = "00"
	        elif len(num) == 3:
	            zero = "0"
	        elif len(num) == 4:
	            zero = ""
	        else:
	            raise SyncBoxException(f"The parameter '{var}' is unsupported. Please check that your parameters is maximum 4 digits")
	        
	        string = zero + num
	        return bytes(string, 'ascii')
	    
	
	
	    def _getAvailableSerialPorts(self) -> list:
	        """
	        This function finds every available serial port on the currently used OS.
	
	        Return
	        -------
	        list
	            A list of available serial ports
	        
	        Raises
	        -------
	
	        EnvirornmentError
	            If operative system is not available
	        SerialExcpetion 
	            If serial is not available
	        """
	        if sys.platform.startswith('win'):
	            ports = ['COM%s' % (i + 1) for i in range(256)]
	        elif sys.platform.startswith('linux') or sys.platform.startswith('cygwin'):
	            ports = glob.glob('/dev/tty[A-Za-z]*')
	        elif sys.platform.startswith('darwin'):
	            ports = glob.glob('/dev/tty.*')
	        else:
	            raise EnvironmentError('Unsupported platform')
	
	        result = []
	
	        for port in ports:
	            try:
	                s = Serial(port)
	
	                s.close()
	                result.append(port)
	            except (OSError, SerialException):
	                pass
	        return result
	    
	
	    def close(self):
	        """
	        This function closes the serial port connection and switches Computer mode off on the SyncBox.
	
	        Raises
	        ----------
	        SyncBoxException
	            if unable to turn off computer mode.
	
	        """
	        if not self.enabled:
	            return False
	        
	        self.port.write(b"D")  
	        time.sleep(0.1)
	        confirmation = self.port.read(1)
	        time.sleep(0.1)
	        if confirmation != b"D":
	            raise SyncBoxException("Unable to disconnect from SyncBox. Please turn it off manually")
	        self.port.close()
	        print("SyncBox disconnected")
	
	
	class SyncBoxException(Exception):
	    pass
	__end__

define inline_script task_init
	set description "Executes Python code"
	set _run ""
	___prepare__
	canvases = {}
	
	for image in exp.pool:
	    canvas = Canvas()
	    canvas.image(exp.pool[image], scale=1.5)
	    canvases[image] = canvas
	
	# Canvas
	fixdot             = Canvas()
	waiting_on_scaner  = Canvas()
	end_screen         = Canvas()
	
	# Draw
	fixdot.fixdot()
	waiting_on_scaner.text('Testet startar snart', font_size=40)
	end_screen.text('Nu är uppgiften klar.', center=True, html=True, font_size=40)
	__end__

define inline_script ttl_module
	set description "Executes Python code"
	set _run ""
	___prepare__
	class TTLController:
	    def __init__(self, enabled=True):
	        self.enabled = enabled
	        self.ttl = None
	        self.ttlFound = False
	        
	        # Only initialize if enabled
	        if self.enabled:
	            self.initialize_ttl()
	    
	    def initialize_ttl(self):
	        """Initialize connection to the BBTK USB TTL Module"""
	        # Get a list of available serial ports
	        ports = serial.tools.list_ports.comports()
	        
	        if not ports:
	            raise RuntimeError("No serial ports found for TTL device. Aborting task.")
	            
	        # Find BBTK USB TTL Module
	        self.ttl = self.find_device('BBTK USB TTL Module', ports, 115200, b'##', b'XX')
	        if self.ttl is not None:
	            self.ttl.write(b'RR')
	            return True
	        return False
	    
	    def find_device(self, device_name, ports, baudrate, command='', expected_command=''):
	        """
	        Find a device connected to one of the given ports.
	        
	        Parameters:
	        - device_name: Name of the device
	        - ports: List of available serial ports
	        - baudrate: Baud rate for serial communication
	        - command: Command to send to the device
	        - expected_command: Expected response from the device
	        
	        Returns:
	        - ser: Serial object if the device is found, None otherwise
	        """
	        for port in ports:
	            try:
	                ser = serial.Serial(port.device, baudrate, timeout=1)
	                if not command:
	                    print(f'Connected to {device_name} on: {ser.name}')
	                    self.ttlFound = True
	                    return ser
	                
	                print(f'Writing {command} to {ser.name}')
	                for i in range(3):
	                    ser.write(command)
	                    confirmation = ser.read(2)
	                    print(f'Got "{confirmation}" as an answer')
	                    if confirmation == expected_command:
	                        print(f'Connected to {device_name} on: {ser.name}')
	                        self.ttlFound = True
	                        return ser
	                
	                print(f'Could not find {device_name} on {ser.name}')
	                self.ttlFound = False
	            except serial.SerialException as e:
	                print(e)
	        
	        return None
	    
	    def send_signal(self, signal):
	        """Send signal to start a channel if TTL is enabled"""
	        if not self.enabled or self.ttl is None:
	            print(f"TTL disabled - would have sent: {signal} to start channel")
	            return False
	        
	        try:
	            self.ttl.write(signal)
	            return True
	        except Exception as e:
	            print(f"Error sending start signal: {e}")
	            return False
	    
	    def pulse_channel(self, signal, duration):
	        self.send_signal(signal)
	        clock.sleep(duration)
	        self.send_signal(close_all)
	__end__

define inline_script variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	state = None
	
	# Time
	time_task_start  = None
	time_image_shown = None
	time_task_end    = None
	
	# Resonses
	is_response_correct = None
	response_sequence   = None
	last_response       = None
	last_response_time  = None
	
	# Silence terminal
	response_time              = None
	live_row_interference_loop = None
	__end__

define inline_script wait_on_scaner
	set description "Executes Python code"
	___run__
	if use_keyboard:
	    print("!!!Keyboard enabled!!!")
	
	if not ttl.enabled:
	    print("!!!TTL not enabled!!!")
	    
	if syncbox.enabled:
	    print('Syncbox started')
	    syncbox.start()
	    waiting_on_scaner.show()
	    while True:
	        response_syncbox = syncbox.readCurrentInputBuffer()
	        if 's' in response_syncbox:
	            time_task_start = clock.time()
	            break
	else:
	    time_task_start = clock.time()
	    print("!!!Syncbox not enabled!!!")
	
	print("---Exepriment Started---")
	ttl.pulse_channel(task_channel, signal_length)
	fixdot.show()
	clock.sleep(time_task_fixdot)
	__end__
	set _prepare ""

